PsychoPy2experiment version="1.81.00"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = untitled
  Units = use prefs
  Screen = 1
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Routines
  Routine Audio_Display
    SoundComponent sound_1
      sound = a2.wav
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 'c'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Text_Intro
    TextComponent text_intro
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Por favor, lee el siguiente texto cuidadosamente.

        Aprieta cualquier boton para continuar.
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      discard previous = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Start
    TextComponent Start_Display
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 50
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      text:
        Hola. Gracias por participar en nuestro experimento.

        Por favor, lee el siguiente texto cuidadosamente.

        Aprieta cualquier boton para continuar.
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Audio_Intro
    TextComponent audio_intro
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 50
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      text:
        Por favor, escucha el siguiente audio cuidadosamente. Por favor, usa los auriculares para esta tarea.

        Aprieta cualquier boton para continuar.
    KeyboardComponent key_resp_6
      forceEndRoutine = True
      discard previous = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Thanks
    TextComponent thanks
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 50
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      text:
        Gracias por la participacion!

        Aprieta cualquier boton para finalizar.
    KeyboardComponent finsih
      forceEndRoutine = True
      discard previous = False
      startVal [time (s)] = 0.0
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  Routine Questionnaire2
    TextComponent questionnaire2
      wrapWidth = 1000
      text [set every repeat] = $question+'\n\n1: '+$answer1+'\n2: '+$answer2+'\n3: '+$answer3
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 50
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    KeyboardComponent key_resp_2
      correctAns = $correctAnswer
      storeCorrect = True
      forceEndRoutine = True
      discard previous = False
      allowedKeys = '1','2','3'
      startVal [time (s)] = 0.0
      store = all keys
  Routine Text_Display
    TextComponent text_display
      wrapWidth = 10000000
      text = La familia hace las maletas para las vacaciones. Marta, que acaba de terminar primer grado, dice a su hermana Silvia: "Yo no necesito hacer las maletas! Sólo necesito mi traje de baño de color rosa". Planea pasar todo el verano en la playa, cavando hoyos en la arena y jugando en el agua. No hay necesidad de llevar su ropa - excepto quizás su vestido favorito. Pueden dejar su pesada maleta en casa, así no tendrá que cargarla. Silvia tiene siete meses y está muy entusiasmada con todo el movimiento a su alrededor. Este será su primer viaje familiar. Pablo está sentado en medio de su habitación, vestido con su pijama rojo mirando muy fijamente a cinco de sus juguetes favoritos. Es una elección difícil. Cuando vaya a nadar necesitará el juguete submarino. Pero si tiene que dormir a la intemperie, la luz linterna de luz roja sería más útil. Sara y Javier, los padres de la manada, están sentados en el sofá blanco repasando la lista de tareas. Sara escribe todo lo que todavía tienen que comprar antes de salir de la ciudad en un diario azul. Todavía está en camisón, mientras discute con Javier acerca de quién se olvidó de comprar el espray protector solar para la pequeña. La  piel de Silvia sigue siendo muy sensible, pero no le gustan nada las cremas por lo que necesitan una loción en espray para que no le moleste. Finalmente están todos sentados en el coche, anticipando los buenos momentos que tienen por delante. El viejo coche gris está cargado con todo tipo de objetos necesarios e innecesarios para disfrutar de ocho días de vacaciones. Alrededor de siete horas los separan de la orilla del mar y sus amigos durante el verano.
      stopVal [duration (s)] = 1000
      pos [set every frame] = [20000-3*frameN, 50]
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 50
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    KeyboardComponent quit_display
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 'c'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Start
  Routine Text_Display
  LoopInitiator questions1 loopType="TrialHandler"
    conditionsFile = questionnaire_Marta.xlsx
    loopType = random
    nReps = 1
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    Routine Questionnaire2
  LoopTerminator questions1
  Routine Audio_Intro
  Routine Audio_Display
  LoopInitiator questions2 loopType="TrialHandler"
    conditionsFile = questionnaire_Maria.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'answer1': u'una planta de interior', u'question': u'\xbfQu\xe9 estaba pintando Maria?', u'correctAnswer': 2.0, u'answer3': u'un bodeg\xf3n de botellas verdes', u'answer2': u'un ramo de flores'},
      {u'answer1': u'negro', u'question': u'\xbfDe qu\xe9 color es el pelo de Maria?', u'correctAnswer': 1.0, u'answer3': u'marr\xf3n', u'answer2': u'rubio'},
      {u'answer1': u'azul', u'question': u'\xbfCu\xe1l es el color favorito de Maria?', u'correctAnswer': 3.0, u'answer3': u'amarillo', u'answer2': u'rojo'},
      {u'answer1': u'Ana', u'question': u'\xbfCu\xe1l es el nombre de la madre?', u'correctAnswer': 2.0, u'answer3': u'Laura', u'answer2': u'Paula'},
      {u'answer1': u'azul', u'question': u'\xbfDe qu\xe9 color son los guantes de cocina de la madre?', u'correctAnswer': 3.0, u'answer3': u'rojo', u'answer2': u'verde'},
      {u'answer1': u'el t\xedo de Maria', u'question': u'\xbfQui\xe9n es Alejandro?', u'correctAnswer': 3.0, u'answer3': u'el hermano de Maria', u'answer2': u'el padre de Maria'},
      {u'answer1': u'su tablet', u'question': u'\xbfCon qu\xe9 est\xe1 jugando el hermano mientras espera a que empiece la cena?', u'correctAnswer': 1.0, u'answer3': u'su port\xe1til', u'answer2': u'su mobil'},
      {u'answer1': u'pollo', u'question': u'\xbfQu\xe9 est\xe1 preparando la madre para cenar?', u'correctAnswer': 1.0, u'answer3': u'lasa\xf1a', u'answer2': u'sopa'}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
    Routine Questionnaire2
  LoopTerminator questions2
  Routine Thanks
