PsychoPy2experiment version="1.81.00"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = untitled
  Units = use prefs
  Screen = 1
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Routines
  Routine Audio_Display
    SoundComponent sound_1
      sound = a1.wav
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 'c'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Text_Intro
    TextComponent text_intro
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 50
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      text:
        Por favor, lee el siguiente texto cuidadosamente.

        Aprieta cualquier boton para continuar.
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      discard previous = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Start
    TextComponent Start_Display
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 50
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      text:
        Hola. Gracias por participar en nuestro experimento.

        Por favor, escucha el siguiente audio cuidadosamente. Por favor, usa los auriculares para esta tarea.

        Aprieta cualquier boton para continuar.
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Thanks
    TextComponent thanks
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 50
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      text:
        Gracias por tu participacion!

        Aprieta cualquier boton para finalizar.
    KeyboardComponent finsih
      forceEndRoutine = True
      discard previous = False
      startVal [time (s)] = 0.0
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  Routine Questionnaire2
    TextComponent questionnaire2
      wrapWidth = 1000
      text [set every repeat] = $question+'\n\n1: '+$answer1+'\n2: '+$answer2+'\n3: '+$answer3
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 50
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    KeyboardComponent key_resp_2
      correctAns = $correctAnswer
      storeCorrect = True
      forceEndRoutine = True
      discard previous = False
      allowedKeys = '1','2','3'
      startVal [time (s)] = 0.0
      store = all keys
  Routine Text_Display
    TextComponent text_display
      wrapWidth = 10000000
      text = A una niña pequeña llamada Maria le encanta pintar. En todos sus cuadros puedes encontrar algo de color amarillo, que es su color favorito. Hoy está de pie delante de su caballete, llevando el pelo largo y negro atado en una coleta. Ella está pintando un ramo de hermosas margaritas en un jarrón verde, cuando su madre Paula, grita a través de la casa: "¡La cena está lista!" Pero María aún no ha terminado su cuadro: "¡Cinco minutos más!", ella grita. La madre entra en su habitación: "Si no comemos ya, la comida se enfriará." Así que Maria la sigue hasta la cocina. Su hermano Alejandro ya está sentado en la mesa, jugando con su tablet. Alejandro es un poco más alto que Maria, a pesar de que es dos años menor que ella. Él espera aburrido para que empiece la cena. La madre se está poniendo sus guantes de cocina rojos para sacar el pollo del horno cuando el tío de María, Carlos, entra en la cocina. Él amablemente da unas palmaditas en la cabeza de Alejandro mientras camina detrás de Paula, dándole un beso en la mejilla. Carlos se quita su chaqueta marrón y se sienta. Las paredes de la cocina están llenos de cuadros de María y Carlos los admira cada vez que viene de visita. Maria está tan entusiasmada que corre hacia su habitación para enseñarle su último cuadro de flores a Carlos. Ella también le dice que su pincel preferido está roto, lo que hace proponer a Carlos a ir hacia la tienda el siguiente día para comprar uno nuevo. De repente, la tía Laura entra bruscamente en la sala, llevando la noticia de que está nevando. La familia entera corre afuera hacia el extraño evento. Solamente Alejandro se queda sentado adentro, impasiblemente observando la agitada familia. Todo indica que llegarán a la cena tarde. ¡Otra vez!
      stopVal [duration (s)] = 1000
      pos [set every frame] = [20000-3*frameN, 50]
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 50
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    KeyboardComponent quit_display
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 'c'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Start
  Routine Audio_Display
  LoopInitiator questions1 loopType="TrialHandler"
    conditionsFile = questionnaire_Marta.xlsx
    loopType = random
    nReps = 1
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    Routine Questionnaire2
  LoopTerminator questions1
  Routine Text_Intro
  Routine Text_Display
  LoopInitiator questions2 loopType="TrialHandler"
    conditionsFile = questionnaire_Maria.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'answer1': u'una planta de interior', u'question': u'\xbfQu\xe9 estaba pintando Maria?', u'correctAnswer': 2.0, u'answer3': u'un bodeg\xf3n de botellas verdes', u'answer2': u'un ramo de flores'},
      {u'answer1': u'negro', u'question': u'\xbfDe qu\xe9 color es el pelo de Maria?', u'correctAnswer': 1.0, u'answer3': u'marr\xf3n', u'answer2': u'rubio'},
      {u'answer1': u'azul', u'question': u'\xbfCu\xe1l es el color favorito de Maria?', u'correctAnswer': 3.0, u'answer3': u'amarillo', u'answer2': u'rojo'},
      {u'answer1': u'Ana', u'question': u'\xbfCu\xe1l es el nombre de la madre?', u'correctAnswer': 2.0, u'answer3': u'Laura', u'answer2': u'Paula'},
      {u'answer1': u'azul', u'question': u'\xbfDe qu\xe9 color son los guantes de cocina de la madre?', u'correctAnswer': 3.0, u'answer3': u'rojo', u'answer2': u'verde'},
      {u'answer1': u'el t\xedo de Maria', u'question': u'\xbfQui\xe9n es Alejandro?', u'correctAnswer': 3.0, u'answer3': u'el hermano de Maria', u'answer2': u'el padre de Maria'},
      {u'answer1': u'su tablet', u'question': u'\xbfCon qu\xe9 est\xe1 jugando el hermano mientras espera a que empiece la cena?', u'correctAnswer': 1.0, u'answer3': u'su port\xe1til', u'answer2': u'su mobil'},
      {u'answer1': u'pollo', u'question': u'\xbfQu\xe9 est\xe1 preparando la madre para cenar?', u'correctAnswer': 1.0, u'answer3': u'lasa\xf1a', u'answer2': u'sopa'}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
    Routine Questionnaire2
  LoopTerminator questions2
  Routine Thanks
